<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.0-alpha018"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>OptoStim</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>ThisAction</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CurrentPosition</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Z</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ThisAction</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Location</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="GreaterThanOrEqual" />
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ThisAction</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Delay</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Delay">
                <gl:DueTime>PT0S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ThisAction</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2.WaveformIndex</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CurrentOptoStimId</Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>GiveOptoStim</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="15" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="17" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>