<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.0-alpha012"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="LockAtThreshold" />
        <Property Name="TeleportThreshold" />
        <Property Name="DelayTeleport" />
        <Property Name="TeleportToPosition" />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>Teleport</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="LockAtThreshold" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>LockAtThreshold</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CurrentPosition</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Z</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="TeleportThreshold" />
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="FloatProperty">
                <Value>5</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>LockAtThreshold?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LockAtThreshold</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnableDisplacementUpdates</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="6" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" DisplayName="DelayTeleport" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Delay">
                <gl:DueTime>PT1S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>UnlockAtThreshold?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LockAtThreshold</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>EnableDisplacementUpdates</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="6" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="TeleportToPosition" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TeleportTo</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="14" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>